PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = first_sbtg
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Routines
  Routine trial
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = What up?
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions
    TextComponent text
      font = TimesNew
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Hello Participant!


        Please press any key to continue
    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = sbtg_sociel_believe_trust_game/contitions.xlsx
    loopType = random
    nReps = 5
    random seed = 1234
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    conditions:
      [OrderedDict([('playerId', 'A'), ('actionLabel', 'trust'), ('correctResponse', 'trust')]),
      OrderedDict([('playerId', 'A'), ('actionLabel', 'defect'), ('correctResponse', 'defect')]),
      OrderedDict([('playerId', 'B'), ('actionLabel', 'trust'), ('correctResponse', 'trust')]),
      OrderedDict([('playerId', 'B'), ('actionLabel', 'defect'), ('correctResponse', 'defect')])]
    Routine trial
  LoopTerminator trials
